PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $[1,1,1]
  expName = PICTURE_NAMING_TASK
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instruction
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    TextComponent text_instruction
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Anda akan melihat gambar pada setiap trial.
        Sebutkan nama gambar tersebut secara lisan SEAKURAT mungkin.

        Jika muncul bendera Indonesia, jawab dengan Bahasa Indonesia.
        Jika muncul bendera Inggris, jawab dengan Bahasa Inggris.

        Tekan spasi untuk melanjutkan.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_block
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    TextComponent text_practice_block
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Blok pertama adalah blok latihan.
        INGAT: jawab seakurat mungkin.

        Tekan spasi untuk melanjutkan.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_dot_EN
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    PolygonComponent practice_fixationdot_EN
      fillColor = black
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_picstim_EN
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    ImageComponent practice_languagecue_EN
      image [set every repeat] = $path_lc_practice_EN
      pos = (0, 0.3)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent practice_picturestimuli_EN
      image [set every repeat] = $path_ps_practice_EN
      pos = (0, -0.04)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MicrophoneComponent practice_EN_response
      deviceLabel = usethis
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine practice_blank_EN
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    ImageComponent practice_blankscreen_EN
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine dot_EN
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    PolygonComponent fixationdot_EN
      fillColor = black
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine picstim_EN
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    ImageComponent languagecue_EN
      image [set every repeat] = $path_lc_EN
      pos = (0, 0.3)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent picturestimuli_EN
      image [set every repeat] = $path_ps_EN
      pos = (0, -0.04)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MicrophoneComponent EN_response
      deviceLabel = usethis
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine blank_EN
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    ImageComponent blankscreen_EN
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine switching_block
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    TextComponent text_switching_block
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        breakDuration = 31
        countdown = breakDuration
      Each Frame:
        remaining = int(breakDuration - t)
        countdown = max(remaining, 0)

        text_switching_block.setText(
            "Selamat, Anda telah menyelesaikan blok non-switching!\n\n"
            "Setelah jeda istirahat, Anda akan mengerjakan blok switching.\n"
            "Ikuti kode bendera Indonesia dan Inggris seperti sebelumnya.\n\n"
            f"Jeda istirahat dalam {countdown} detik"
        )

        if t >= breakDuration:
            continueRoutine = False
  Routine nonswitching_block
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    TextComponent text_nonswitching_block
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        breakDuration = 31
        countdown = breakDuration
      Each Frame:
        remaining = int(breakDuration - t)
        countdown = max(remaining, 0)

        text_nonswitching_block.setText(
            "Selamat, Anda telah menyelesaikan blok latihan!\n\n"
            "Setelah jeda istirahat, Anda akan mengerjakan blok non-switching.\n"
            "Jangan lupa mengikuti kode bendera Indonesia dan Inggris.\n\n"
            f"Jeda istirahat dalam {countdown} detik"
        )

        if t >= breakDuration:
            continueRoutine = False
  Routine experiment_end
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    TextComponent text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Selamat, Anda telah menyelesaikan tugas ini!
        Terima kasih atas partisipasi Anda.

        Tekan spasi untuk keluar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_dot_ID
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    PolygonComponent practice_fixationdot_IN
      fillColor = black
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_picstim_ID
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    ImageComponent practice_languagecue_ID
      image [set every repeat] = $path_lc_practice_ID
      pos = (0, 0.3)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent practice_picturestimuli_ID
      image [set every repeat] = $path_ps_practice_ID
      pos = (0, -0.04)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MicrophoneComponent practice_ID_response
      deviceLabel = usethis
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine practice_blank_ID
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    ImageComponent practice_blankscreen_IN
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine practice_picstim_SWITCHING
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    ImageComponent practice_languagecue_SWITCHING
      image [set every repeat] = $path_lc_practice_SWITCHING
      pos = (0, 0.3)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent practice_picturestimuli_SWITCHING
      image [set every repeat] = $path_ps_practice_SWITCHING
      pos = (0, -0.04)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MicrophoneComponent practice_SWITCHING_response
      deviceLabel = usethis
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine practice_dot_SWITCHING
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    PolygonComponent practice_fixationdot_SWITCH
      fillColor = black
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_blank_SWITCHING
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    ImageComponent practice_blankscreen_SWITCHING
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine dot_ID
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    PolygonComponent fixationdot_ID
      fillColor = black
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine picstim_ID
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    ImageComponent languagecue_ID
      image [set every repeat] = $path_lc_ID
      pos = (0, 0.3)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent picturestimuli_ID
      image [set every repeat] = $path_ps_ID
      pos = (0, -0.04)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MicrophoneComponent ID_response
      deviceLabel = usethis
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine blank_ID
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    ImageComponent blankscreen_ID
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine picstim_SWITCHING
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    ImageComponent languagecue_SWITCHING
      image [set every repeat] = $path_lc_SWITCHING
      pos = (0, 0.3)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent picturestimuli_SWITCHING
      image [set every repeat] = $path_ps_SWITCHING
      pos = (0, -0.04)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MicrophoneComponent SWITCHING_response
      deviceLabel = usethis
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine dot_SWITCHING
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    PolygonComponent fixationdot_MIX
      fillColor = black
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank_SWITCHING
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    ImageComponent blankscreen_SWITCH
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instruction
  Routine practice_block
  LoopInitiator practice_ID_block loopType="TrialHandler"
    conditionsFile = condition/condition_practice_ID.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'picture_stimuli_practice_ID': 'PICTURE_7', 'path_ps_practice_ID': 'final_picture_stimuli/PICTURE_7', 'language_cue_practice_ID': 'ID', 'path_lc_practice_ID': 'language_cue/ID'},
      {'picture_stimuli_practice_ID': 'PICTURE_2', 'path_ps_practice_ID': 'final_picture_stimuli/PICTURE_2', 'language_cue_practice_ID': 'ID', 'path_lc_practice_ID': 'language_cue/ID'},
      {'picture_stimuli_practice_ID': 'PICTURE_1', 'path_ps_practice_ID': 'final_picture_stimuli/PICTURE_1', 'language_cue_practice_ID': 'ID', 'path_lc_practice_ID': 'language_cue/ID'},
      {'picture_stimuli_practice_ID': 'PICTURE_6', 'path_ps_practice_ID': 'final_picture_stimuli/PICTURE_6', 'language_cue_practice_ID': 'ID', 'path_lc_practice_ID': 'language_cue/ID'},
      {'picture_stimuli_practice_ID': 'PICTURE_5', 'path_ps_practice_ID': 'final_picture_stimuli/PICTURE_5', 'language_cue_practice_ID': 'ID', 'path_lc_practice_ID': 'language_cue/ID'},
      {'picture_stimuli_practice_ID': 'PICTURE_8', 'path_ps_practice_ID': 'final_picture_stimuli/PICTURE_8', 'language_cue_practice_ID': 'ID', 'path_lc_practice_ID': 'language_cue/ID'},
      {'picture_stimuli_practice_ID': 'PICTURE_3', 'path_ps_practice_ID': 'final_picture_stimuli/PICTURE_3', 'language_cue_practice_ID': 'ID', 'path_lc_practice_ID': 'language_cue/ID'},
      {'picture_stimuli_practice_ID': 'PICTURE_4', 'path_ps_practice_ID': 'final_picture_stimuli/PICTURE_4', 'language_cue_practice_ID': 'ID', 'path_lc_practice_ID': 'language_cue/ID'}]
    Routine practice_dot_ID
    Routine practice_picstim_ID
    Routine practice_blank_ID
  LoopTerminator practice_ID_block
  LoopInitiator practice_EN_block loopType="TrialHandler"
    conditionsFile = condition/condition_practice_EN.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'picture_stimuli_practice_EN': 'PICTURE_2', 'path_ps_practice_EN': 'final_picture_stimuli/PICTURE_1', 'language_cue_practice_EN': 'EN', 'path_lc_practice_EN': 'language_cue/EN'},
      {'picture_stimuli_practice_EN': 'PICTURE_7', 'path_ps_practice_EN': 'final_picture_stimuli/PICTURE_5', 'language_cue_practice_EN': 'EN', 'path_lc_practice_EN': 'language_cue/EN'},
      {'picture_stimuli_practice_EN': 'PICTURE_3', 'path_ps_practice_EN': 'final_picture_stimuli/PICTURE_3', 'language_cue_practice_EN': 'EN', 'path_lc_practice_EN': 'language_cue/EN'},
      {'picture_stimuli_practice_EN': 'PICTURE_5', 'path_ps_practice_EN': 'final_picture_stimuli/PICTURE_5', 'language_cue_practice_EN': 'EN', 'path_lc_practice_EN': 'language_cue/EN'},
      {'picture_stimuli_practice_EN': 'PICTURE_6', 'path_ps_practice_EN': 'final_picture_stimuli/PICTURE_6', 'language_cue_practice_EN': 'EN', 'path_lc_practice_EN': 'language_cue/EN'},
      {'picture_stimuli_practice_EN': 'PICTURE_8', 'path_ps_practice_EN': 'final_picture_stimuli/PICTURE_8', 'language_cue_practice_EN': 'EN', 'path_lc_practice_EN': 'language_cue/EN'},
      {'picture_stimuli_practice_EN': 'PICTURE_1', 'path_ps_practice_EN': 'final_picture_stimuli/PICTURE_1', 'language_cue_practice_EN': 'EN', 'path_lc_practice_EN': 'language_cue/EN'},
      {'picture_stimuli_practice_EN': 'PICTURE_4', 'path_ps_practice_EN': 'final_picture_stimuli/PICTURE_4', 'language_cue_practice_EN': 'EN', 'path_lc_practice_EN': 'language_cue/EN'}]
    Routine practice_dot_EN
    Routine practice_picstim_EN
    Routine practice_blank_EN
  LoopTerminator practice_EN_block
  LoopInitiator practice_SWITCHING_block loopType="TrialHandler"
    conditionsFile = condition/condition_practice_SWITCHING.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'picture_stimuli_practice_SWITCHING': 'PICTURE_6', 'path_ps_practice_SWITCHING': 'final_picture_stimuli/PICTURE_6', 'language_cue_practice_SWITCHING': 'EN', 'path_lc_practice_SWITCHING': 'language_cue/EN'},
      {'picture_stimuli_practice_SWITCHING': 'PICTURE_8', 'path_ps_practice_SWITCHING': 'final_picture_stimuli/PICTURE_8', 'language_cue_practice_SWITCHING': 'EN', 'path_lc_practice_SWITCHING': 'language_cue/EN'},
      {'picture_stimuli_practice_SWITCHING': 'PICTURE_7', 'path_ps_practice_SWITCHING': 'final_picture_stimuli/PICTURE_7', 'language_cue_practice_SWITCHING': 'ID', 'path_lc_practice_SWITCHING': 'language_cue/ID'},
      {'picture_stimuli_practice_SWITCHING': 'PICTURE_4', 'path_ps_practice_SWITCHING': 'final_picture_stimuli/PICTURE_4', 'language_cue_practice_SWITCHING': 'EN', 'path_lc_practice_SWITCHING': 'language_cue/EN'},
      {'picture_stimuli_practice_SWITCHING': 'PICTURE_5', 'path_ps_practice_SWITCHING': 'final_picture_stimuli/PICTURE_5', 'language_cue_practice_SWITCHING': 'EN', 'path_lc_practice_SWITCHING': 'language_cue/EN'},
      {'picture_stimuli_practice_SWITCHING': 'PICTURE_2', 'path_ps_practice_SWITCHING': 'final_picture_stimuli/PICTURE_2', 'language_cue_practice_SWITCHING': 'ID', 'path_lc_practice_SWITCHING': 'language_cue/ID'},
      {'picture_stimuli_practice_SWITCHING': 'PICTURE_1', 'path_ps_practice_SWITCHING': 'final_picture_stimuli/PICTURE_1', 'language_cue_practice_SWITCHING': 'ID', 'path_lc_practice_SWITCHING': 'language_cue/ID'}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
    Routine practice_dot_SWITCHING
    Routine practice_picstim_SWITCHING
    Routine practice_blank_SWITCHING
  LoopTerminator practice_SWITCHING_block
  Routine nonswitching_block
  LoopInitiator ID_block loopType="TrialHandler"
    conditionsFile = condition/condition_ID.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'picture_stimuli_ID': 'PICTURE_18', 'path_ps_ID': 'final_picture_stimuli/PICTURE_18', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_20', 'path_ps_ID': 'final_picture_stimuli/PICTURE_20', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_12', 'path_ps_ID': 'final_picture_stimuli/PICTURE_12', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_31', 'path_ps_ID': 'final_picture_stimuli/PICTURE_31', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_28', 'path_ps_ID': 'final_picture_stimuli/PICTURE_28', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_29', 'path_ps_ID': 'final_picture_stimuli/PICTURE_29', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_33', 'path_ps_ID': 'final_picture_stimuli/PICTURE_33', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_39', 'path_ps_ID': 'final_picture_stimuli/PICTURE_39', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_25', 'path_ps_ID': 'final_picture_stimuli/PICTURE_25', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'},
      {'picture_stimuli_ID': 'PICTURE_32', 'path_ps_ID': 'final_picture_stimuli/PICTURE_32', 'language_cue_ID': 'ID', 'path_lc_ID': 'language_cue/ID'}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
    Routine dot_ID
    Routine picstim_ID
    Routine blank_ID
  LoopTerminator ID_block
  LoopInitiator EN_block loopType="TrialHandler"
    conditionsFile = condition/condition_EN.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'picture_stimuli_EN': 'PICTURE_13', 'path_ps_EN': 'final_picture_stimuli/PICTURE_13', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_16', 'path_ps_EN': 'final_picture_stimuli/PICTURE_16', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_21', 'path_ps_EN': 'final_picture_stimuli/PICTURE_21', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_25', 'path_ps_EN': 'final_picture_stimuli/PICTURE_25', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_36', 'path_ps_EN': 'final_picture_stimuli/PICTURE_36', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_32', 'path_ps_EN': 'final_picture_stimuli/PICTURE_32', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_17', 'path_ps_EN': 'final_picture_stimuli/PICTURE_17', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_24', 'path_ps_EN': 'final_picture_stimuli/PICTURE_24', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_40', 'path_ps_EN': 'final_picture_stimuli/PICTURE_40', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'},
      {'picture_stimuli_EN': 'PICTURE_33', 'path_ps_EN': 'final_picture_stimuli/PICTURE_33', 'language_cue_EN': 'EN', 'path_lc_EN': 'language_cue/EN'}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
    Routine dot_EN
    Routine picstim_EN
    Routine blank_EN
  LoopTerminator EN_block
  Routine switching_block
  LoopInitiator SWITCHING_block loopType="TrialHandler"
    conditionsFile = condition/condition_SWITCHING.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'picture_stimuli_SWITCHING': 'PICTURE_29', 'path_ps_SWITCHING': 'final_picture_stimuli/PICTURE_29', 'language_cue_WITCHING': 'EN', 'path_lc_SWITCHING': 'language_cue/EN'},
      {'picture_stimuli_SWITCHING': 'PICTURE_39', 'path_ps_SWITCHING': 'final_picture_stimuli/PICTURE_39', 'language_cue_WITCHING': 'EN', 'path_lc_SWITCHING': 'language_cue/EN'},
      {'picture_stimuli_SWITCHING': 'PICTURE_37', 'path_ps_SWITCHING': 'final_picture_stimuli/PICTURE_37', 'language_cue_WITCHING': 'ID', 'path_lc_SWITCHING': 'language_cue/ID'},
      {'picture_stimuli_SWITCHING': 'PICTURE_28', 'path_ps_SWITCHING': 'final_picture_stimuli/PICTURE_28', 'language_cue_WITCHING': 'EN', 'path_lc_SWITCHING': 'language_cue/EN'},
      {'picture_stimuli_SWITCHING': 'PICTURE_20', 'path_ps_SWITCHING': 'final_picture_stimuli/PICTURE_20', 'language_cue_WITCHING': 'EN', 'path_lc_SWITCHING': 'language_cue/EN'},
      {'picture_stimuli_SWITCHING': 'PICTURE_15', 'path_ps_SWITCHING': 'final_picture_stimuli/PICTURE_15', 'language_cue_WITCHING': 'ID', 'path_lc_SWITCHING': 'language_cue/ID'},
      {'picture_stimuli_SWITCHING': 'PICTURE_18', 'path_ps_SWITCHING': 'final_picture_stimuli/PICTURE_18', 'language_cue_WITCHING': 'ID', 'path_lc_SWITCHING': 'language_cue/ID'},
      {'picture_stimuli_SWITCHING': 'PICTURE_12', 'path_ps_SWITCHING': 'final_picture_stimuli/PICTURE_12', 'language_cue_WITCHING': 'EN', 'path_lc_SWITCHING': 'language_cue/EN'}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
    Routine dot_SWITCHING
    Routine picstim_SWITCHING
    Routine blank_SWITCHING
  LoopTerminator SWITCHING_block
  Routine experiment_end
